PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Trial1
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent polygon
      anchor = center-right
      fillColor = 0.8824, 0.9451, 1.0000
      interpolate = nearest
      pos = (20, 10)
      shape = triangle
      size = (5,5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      units = pix
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Flow
  Routine trial
