PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Solo demo
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine routine_1
    RoutineSettingsComponent routine_1
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      desc:
        Welcome to the lexical decision task!

        Press 'F' if both strings are words.


        Press 'J' if at least one is a non-word.


        Press SPACE to begin.
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
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      text:
        Welcome to the lexical decision task!

        Press 'S' if both strings are words.


        Press 'N' if at least one is a non-word.


        Press SPACE to begin.
  Routine trial
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    TextComponent Trial1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $string_1 + "\n" + string_2
    KeyboardComponent key_resp_2
      allowedKeys = 's','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine routine_2
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thank you for participating!
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Flow
  Routine routine_1
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/HP/Downloads/lexical_decision_task_stimuli (1).xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'pair_type': 'Strongly-Related', 'string_1': 'BUTTER', 'string_2': 'BREAD', 'is_word': 1},
      {'pair_type': 'Strongly-Related', 'string_1': 'CANDLE', 'string_2': 'LIGHT', 'is_word': 1},
      {'pair_type': 'Weakly-Related', 'string_1': 'CYCLE', 'string_2': 'TRAYN', 'is_word': 0},
      {'pair_type': 'Weakly-Related', 'string_1': 'TABLE', 'string_2': 'PLANT', 'is_word': 1},
      {'pair_type': 'Unrelated', 'string_1': 'HAMMER', 'string_2': 'FOME', 'is_word': 0},
      {'pair_type': 'Unrelated', 'string_1': 'BOOK', 'string_2': 'ZERT', 'is_word': 0},
      {'pair_type': 'Strongly-Related', 'string_1': 'WINTER', 'string_2': 'SNOW', 'is_word': 1},
      {'pair_type': 'Strongly-Related', 'string_1': 'SUMMER', 'string_2': 'HOT', 'is_word': 1},
      {'pair_type': 'Weakly-Related', 'string_1': 'JUGDE', 'string_2': 'JUDGE', 'is_word': 0},
      {'pair_type': 'Weakly-Related', 'string_1': 'KEAP', 'string_2': 'KEEP', 'is_word': 0},
      {'pair_type': 'Unrelated', 'string_1': 'FREAK', 'string_2': 'BREAK', 'is_word': 1},
      {'pair_type': 'Unrelated', 'string_1': 'CLOUD', 'string_2': 'GLEP', 'is_word': 0},
      {'pair_type': 'Strongly-Related', 'string_1': 'SUN', 'string_2': 'MOON', 'is_word': 1},
      {'pair_type': 'Strongly-Related', 'string_1': 'CAT', 'string_2': 'DOG', 'is_word': 1},
      {'pair_type': 'Unrelated', 'string_1': 'CHAIR', 'string_2': 'FRUGT', 'is_word': 0},
      {'pair_type': 'Unrelated', 'string_1': 'DOG', 'string_2': 'PLOON', 'is_word': 0},
      {'pair_type': 'Weakly-Related', 'string_1': 'CLOUD', 'string_2': 'STONE', 'is_word': 0}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
    Routine trial
  LoopTerminator trials
  Routine trial
  Routine routine_2
